PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = 0.3569, 1.0000, -0.6314
  expName = Group Project
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent target
      color = 1.0000, -0.1765, 0.4118
      colorSpace = dkl
      letterHeight = 0.07
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = 7
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5:
            num_distr = 5
            thisExp.addData('num_distr', num_distr)
        else:
            num_distr = 3
            thisExp.addData('num_distr', num_distr)
        distractors = []

        for i in range(num_distr):

            distr = visual.TextStim(win=win, name='distr',
                text='B',
                font='Open Sans',
                pos=(random()-0.5, random()-0.5), height=0.1, wrapWidth=None, ori=randint(0,360),
                color=[0,1,3], colorSpace='dkl', opacity=None,
                languageStyle='LTR',
                depth=0.0);

            distractors.append(distr)



        for distr in distractors:
            distr.setAutoDraw(True)
      End Routine:
        for distr in distractors:
            distr.setAutoDraw(False)
    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5:
            num_distr = 5
            thisExp.addData('num_distr', num_distr)
        else:
            num_distr = 3
            thisExp.addData('num_distr', num_distr)
        distractors = []

        for i in range(num_distr):

            distr = visual.TextStim(win=win, name='distr',
                text='L',
                font='Open Sans',
                pos=(random()-0.5, random()-0.5), height=0.1, wrapWidth=None, ori=randint(0,360),
                color=[0,1,1], colorSpace='dkl', opacity=None,
                languageStyle='LTR',
                depth=0.0);

            distractors.append(distr)



        for distr in distractors:
            distr.setAutoDraw(True)
      End Routine:
        for distr in distractors:
            distr.setAutoDraw(False)
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5:
            num_distr = 5
            thisExp.addData('num_distr', num_distr)
        else:
            num_distr = 3
            thisExp.addData('num_distr', num_distr)
        distractors = []

        for i in range(num_distr):

            distr = visual.TextStim(win=win, name='distr',
                text='Q',
                font='Open Sans',
                pos=(random()-0.5, random()-0.5), height=0.1, wrapWidth=None, ori=randint(0,360),
                color=[0,1,2], colorSpace='dkl', opacity=None,
                languageStyle='LTR',
                depth=0.0);

            distractors.append(distr)



        for distr in distractors:
            distr.setAutoDraw(True)
      End Routine:
        for distr in distractors:
            distr.setAutoDraw(False)
    TextComponent target_2
      color = 1.0000, -0.1765, 0.4118
      colorSpace = dkl
      letterHeight = 0.07
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = A
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine trial
  LoopTerminator trials
